# Generated by Configurator on Tue Jul 02 15:07:33 EDT 2013

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
#Device,Zeiss AxioCam,AxioCam,Zeiss AxioCam
Device,ZeissScope,ZeissCAN29,ZeissScope
Device,ZeissXYStage,ZeissCAN29,ZeissXYStage
Device,ZeissFocusAxis,ZeissCAN29,ZeissFocusAxis
Device,ZeissReflectorTurret,ZeissCAN29,ZeissReflectorTurret
Device,ZeissObjectiveTurret,ZeissCAN29,ZeissObjectiveTurret
Device,ZeissColibri,ZeissCAN29,ZeissColibri
Device,ZeissReflectedLightShutter,ZeissCAN29,ZeissReflectedLightShutter

# Pre-init settings for devices
Property,ZeissScope,AnswerTimeOut,250.0000
Property,ZeissScope,Port,COM5

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,57600
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
#Property,Core,Camera,Zeiss AxioCam
Property,Core,Shutter,ZeissReflectedLightShutter
Property,Core,Focus,ZeissFocusAxis
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# ZeissReflectorTurret
Label,ZeissReflectorTurret,9,10- 
Label,ZeissReflectorTurret,8,9- 
Label,ZeissReflectorTurret,7,8- 
Label,ZeissReflectorTurret,6,7- 
Label,ZeissReflectorTurret,5,6-DIC TL
Label,ZeissReflectorTurret,4,5- 
Label,ZeissReflectorTurret,3,4-50 Cy 5
Label,ZeissReflectorTurret,2,3-43 DsRed
Label,ZeissReflectorTurret,1,2-44 FITC
Label,ZeissReflectorTurret,0,1-49 DAPI
# ZeissObjectiveTurret
Label,ZeissObjectiveTurret,5,6-LCI Plan-Neofluar 25x/0.8 Imm Korr DIC M27
Label,ZeissObjectiveTurret,4,5-Plan-Neofluar 40x/1.30 Oil Ph 3
Label,ZeissObjectiveTurret,3,4-40x/1.4h
Label,ZeissObjectiveTurret,2,3-Plan-Apochromat 63x/1.40 Oil M27
Label,ZeissObjectiveTurret,1,2-Plan-Apochromat 20x/0.8 M27
Label,ZeissObjectiveTurret,0,1-Plan-Apochromat 10x/0.45 M27

# Configuration presets
# Group: Channel
# Preset: DsRed
ConfigGroup,Channel,DsRed,ZeissReflectorTurret,Label,3-43 DsRed
ConfigGroup,Channel,DsRed,ZeissReflectorTurret,State,2

# Preset: Transmitted Light
ConfigGroup,Channel,Transmitted Light,ZeissReflectorTurret,Label,5- 
ConfigGroup,Channel,Transmitted Light,ZeissReflectorTurret,State,4

# Preset: FITC
ConfigGroup,Channel,FITC,ZeissReflectorTurret,Label,2-44 FITC
ConfigGroup,Channel,FITC,ZeissReflectorTurret,State,1

# Preset: DAPI
ConfigGroup,Channel,DAPI,ZeissReflectorTurret,Label,1-49 DAPI
ConfigGroup,Channel,DAPI,ZeissReflectorTurret,State,0

# Preset: Cy 5
ConfigGroup,Channel,Cy 5,ZeissReflectorTurret,Label,4-50 Cy 5
ConfigGroup,Channel,Cy 5,ZeissReflectorTurret,State,3


# Group: System
# Preset: Startup



# PixelSize settings
# Resolution preset: Res0
ConfigPixelSize,Res0,ZeissXYStage,Move Mode,Direct move to target
PixelSize_um,Res0,0.6
ConfigPixelSize,Res0,ZeissXYStage,TransposeMirrorX,0
PixelSize_um,Res0,0.6
ConfigPixelSize,Res0,ZeissXYStage,TransposeMirrorY,0
PixelSize_um,Res0,0.6


