# Generated by Configurator on Fri Jul 19 14:10:08 EDT 2013

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM2,SerialManager,COM2
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,Zeiss AxioCam,AxioCam,Zeiss AxioCam
Device,ZeissScope,ZeissCAN29,ZeissScope
Device,ZeissReflectorTurret,ZeissCAN29,ZeissReflectorTurret
Device,ZeissObjectiveTurret,ZeissCAN29,ZeissObjectiveTurret
Device,ZeissFocusAxis,ZeissCAN29,ZeissFocusAxis
Device,ZeissXYStage,ZeissCAN29,ZeissXYStage
Device,ZeissReflectedLightShutter,ZeissCAN29,ZeissReflectedLightShutter

# Pre-init settings for devices
Property,ZeissScope,AnswerTimeOut,250.0000
Property,ZeissScope,Port,COM4

# Pre-init settings for COM ports
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,57600
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM2,AnswerTimeout,500.0000
Property,COM2,BaudRate,57600
Property,COM2,DelayBetweenCharsMs,0.0000
Property,COM2,Handshaking,Off
Property,COM2,Parity,None
Property,COM2,StopBits,1
Property,COM2,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,57600
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,57600
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,Zeiss AxioCam
Property,Core,Shutter,ZeissReflectedLightShutter
Property,Core,Focus,ZeissFocusAxis
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# ZeissReflectorTurret
Label,ZeissReflectorTurret,9,10- 
Label,ZeissReflectorTurret,8,9- 
Label,ZeissReflectorTurret,7,8- 
Label,ZeissReflectorTurret,6,7- 
Label,ZeissReflectorTurret,5,6-DIC TL
Label,ZeissReflectorTurret,4,5- 
Label,ZeissReflectorTurret,3,4-50 Cy 5
Label,ZeissReflectorTurret,2,3-43 DsRed
Label,ZeissReflectorTurret,1,2-44 FITC
Label,ZeissReflectorTurret,0,1-49 DAPI
# ZeissObjectiveTurret
Label,ZeissObjectiveTurret,5,6-LCI Plan-Neofluar 25x/0.8 Imm Korr DIC M27
Label,ZeissObjectiveTurret,4,5-Plan-Neofluar 40x/1.30 Oil Ph 3
Label,ZeissObjectiveTurret,3,4-40x/1.4
Label,ZeissObjectiveTurret,2,3-Plan-Apochromat 63x/1.40 Oil M27
Label,ZeissObjectiveTurret,1,2-Plan-Apochromat 20x/0.8 M27
Label,ZeissObjectiveTurret,0,1-Plan-Apochromat 10x/0.45 M27

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

